PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expName, add_info(expInfo), expInfo['date'])
  Experiment info = {'participant': '', 'gender': 'f', 'date_of_birth': 'DD.MM.YYYY', 'ethnicity': '', 'diagnosis': 'control', 'artifact_recording': '1', 'eyesclosed_recording': '1'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = resting_task_v2021
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine welcome_screen
    CodeComponent welcome_screen_code
      Code Type = Py
      Before Experiment:
        # import re for some text substitutions
        import re

        # Additional Info for data file name
        def add_info(expInfo):
            out = 'eyeop'
            if int(expInfo['eyesclosed_recording']):
                out += '_eyecl'
            if int(expInfo['artifact_recording']):
                out += '_artfrec'
            return out
      Begin Experiment:
        # Change this instruction according to your setup!
        continue_button = 'space'
        continue_with_button_text = 'Weiter mit der Leertaste...'
      Begin Routine:
        resp.reset()
        pressed_key, react_t = None, None
      Each Frame:
        if pressed_key is None:
            pressed_key, react_t = resp.poll()
        if pressed_key is not None:
            continueRoutine = False
      End Routine:
        thisExp.addData('button_response', pressed_key)
        thisExp.addData('button_RT', react_t)
    TextComponent welcome_screen_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Herzlich Willkommen und vielen Dank für Ihre Teilnahme an diesem Experiment!
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    TextComponent welcome_screen_cwb_text
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $continue_with_button_text
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    KeyboardComponent welcome_screen_keyboard
      allowedKeys [set every repeat] = $continue_button
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine artifact_instruction
    CodeComponent artifact_instruction_code
      Code Type = Py
      Begin Routine:
        if not int(expInfo['artifact_recording']):
            continueRoutine = False
            tThisFlipGlobal = win.getFutureFlipTime(clock=None)
    TextComponent artifact_instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Zu Beginn der Messung würden wir Sie bitten ein paar Störquellen aufzunehmen. Diese Aufnahmen helfen uns später Störungen aus dem Signal zu entfernen.
    TextComponent artifact_instruction_cwb_text
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $continue_with_button_text
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    KeyboardComponent artifact_instruction_keyboard
      allowedKeys [set every repeat] = $continue_button
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine artifact_explainer
    CodeComponent artifact_explainer_code
      Code Type = Py
      Begin Experiment:
        artifact_running = False
      Begin Routine:
        artifact_running = True
        if not int(expInfo['artifact_recording']):
            continueRoutine = False
            tThisFlipGlobal = win.getFutureFlipTime(clock=None)

        # Delete formatting instructions if present
        text = re.sub(r'<.*?>', '', text)
    TextComponent artifact_explainer_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
      wrapWidth = 1.3
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    TextComponent artifact_explainer_cwb_text
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $continue_with_button_text
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    KeyboardComponent artifact_explainer_keyboard
      allowedKeys [set every repeat] = $continue_button
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine countdown
    CodeComponent countdown_code
      Code Type = Py
      Begin Experiment:
        # count down from x (each number lasts 1 second)
        countdown_from = 3
        countdown_time = 1.0
      Begin Routine:
        if (not int(expInfo['artifact_recording'])) and artifact_running:
            continueRoutine = False
            tThisFlipGlobal = win.getFutureFlipTime(clock=None)

        if (not int(expInfo['eyesclosed_recording'])) and eyesclosed_running:
            continueRoutine = False
            tThisFlipGlobal = win.getFutureFlipTime(clock=None)

        countdown_counter = countdown_from
        add_time = countdown_time
      Each Frame:
        if (t >= add_time - frameTolerance):
            countdown_counter = np.max([countdown_counter - 1, 1])
            add_time += countdown_time
    TextComponent countdown_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(countdown_time*countdown_from)
      text [set every frame] = $countdown_counter
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  Routine artifact_recording
    CodeComponent artifact_recording_code
      Code Type = Py
      Begin Routine:
        trigger_artifact = [TRIGGER_VALUES[trigger_key], 0.0, 0.5]

        if not int(expInfo['artifact_recording']):
            continueRoutine = False
            tThisFlipGlobal = win.getFutureFlipTime(clock=None)
      Each Frame:
        # Trigger recording
        trigger_patch.update(
            cur_t=tThisFlip,
            value=trigger_artifact[0],
            t_onset=trigger_artifact[1],
            t_offset=trigger_artifact[2],
        )
    TextComponent artifact_recording_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $short
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  Routine eyesopen_instruction
    CodeComponent eyesopen_instruction_code
      Code Type = Py
      Begin Routine:
        # Delete formatting instructions if present
        text = re.sub(r'<.*?>', '', text)
    TextComponent eyesopen_instruction_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
      wrapWidth = 1.3
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    TextComponent eyesopen_instruction_cwb_text
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $continue_with_button_text
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    KeyboardComponent eyesopen_instruction_keyboard
      allowedKeys [set every repeat] = $continue_button
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine eyesopen_recording
    CodeComponent eyesopen_recording_code
      Code Type = Py
      Begin Experiment:
        # Duration of Eyes open resting measure in seconds
        eyesopen_duration = 300 # 300 s = 5 min
      Each Frame:
        # Trigger recording
        trigger_patch.update(
            cur_t=tThisFlip,
            value=trigger_eyes_open[0],
            t_onset=trigger_eyes_open[1],
            t_offset=trigger_eyes_open[2],
        )
    PolygonComponent eyesopen_recording_polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $eyesopen_duration
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    KeyboardComponent eyesopen_recording_skip_keyboard
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine eyesclosed_recording
    CodeComponent eyesclosed_recording_code
      Code Type = Py
      Begin Experiment:
        # Duration of Eyes closed resting measure in seconds
        eyesclosed_duration = 300 # 300 s = 5 min
      Begin Routine:
        _vpixx_start_played = False
        _vpixx_stop_played = False

        if not int(expInfo['eyesclosed_recording']):
            continueRoutine = False
            tThisFlipGlobal = win.getFutureFlipTime(clock=None)
      Each Frame:
        if eyesclosed_recording_start_sound.status == STARTED and not _vpixx_start_played:
            vpixx_tones.play_start()
            _vpixx_start_played = True
        if eyesclosed_recording_stop_sound.status == STARTED and not _vpixx_stop_played:
            vpixx_tones.play_stop()
            _vpixx_stop_played = True

        # Trigger recording
        trigger_patch.update(
            cur_t=tThisFlip,
            value=trigger_eyes_closed[0],
            t_onset=trigger_eyes_closed[1],
            t_offset=trigger_eyes_closed[2],
        )
    PolygonComponent eyesclosed_recording_polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [condition] = len(_eyesclosed_recording_skip_keyboard_allKeys)
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    SoundComponent eyesclosed_recording_start_sound
      forceEndRoutine = False
      sound = 660
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      volume = 0.2
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    SoundComponent eyesclosed_recording_stop_sound
      forceEndRoutine = False
      sound = 220
      startVal [condition] = len(_eyesclosed_recording_skip_keyboard_allKeys)
      stopVal [duration (s)] = 1.0
      volume = 0.2
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    KeyboardComponent eyesclosed_recording_skip_keyboard
      allowedKeys = 's'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = len(_eyesclosed_recording_skip_keyboard_allKeys)
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  Routine eyesclosed_instruction
    CodeComponent eyesclosed_instruction_code
      Code Type = Py
      Begin Experiment:
        eyesclosed_running = False
      Begin Routine:
        eyesclosed_running = True
        if not int(expInfo['eyesclosed_recording']):
            continueRoutine = False
            tThisFlipGlobal = win.getFutureFlipTime(clock=None)

        # Delete formatting instructions if present
        text = re.sub(r'<.*?>', '', text)
    TextComponent eyesclosed_instruction_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
      wrapWidth = 1.3
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    TextComponent eyesclosed_instruction_cwb_text
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $continue_with_button_text
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    KeyboardComponent eyesclosed_instruction_keyboard
      allowedKeys [set every repeat] = $continue_button
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye_screen
    TextComponent goodbye_screen_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Das war´s auch schon...

        Vielen Dank für Ihre Teilnahme!

        Bitte warten sie auf weitere Anweisungen der Versuchsleitung.
    TextComponent goodbye_screen_cwb_text
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $continue_with_button_text
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    KeyboardComponent goodbye_screen_keyboard
      allowedKeys [set every repeat] = $continue_button
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine short_blank
    CodeComponent short_blank_code
      Code Type = Py
      Begin Routine:
        if (not int(expInfo['artifact_recording'])) and artifact_running:
            continueRoutine = False
            tThisFlipGlobal = win.getFutureFlipTime(clock=None)

        if (not int(expInfo['eyesclosed_recording'])) and eyesclosed_running:
            continueRoutine = False
            tThisFlipGlobal = win.getFutureFlipTime(clock=None)

        artifact_running = False
        eyesclosed_running = False
    TextComponent short_blank_text
      letterHeight = 0.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine setup
    CodeComponent audio_setup
      Code Type = Py
      Begin Experiment:
        from funcs.audio import VPixxTones
        vpixx_tones = VPixxTones(start_freq=660, stop_freq=220, secs=1.0, volume=0.2)
    CodeComponent trigger_setup
      Code Type = Py
      Begin Experiment:
        from funcs.trigger import TriggerPatch, TRIGGER_VALUES
        trigger_patch = TriggerPatch(win)
        trigger_eyes_open = [TRIGGER_VALUES['eyes_open'], 0.0, 0.5]
        trigger_eyes_closed = [TRIGGER_VALUES['eyes_closed'], 0.0, 0.5]
    CodeComponent response_setup
      Code Type = Py
      Before Experiment:
        from funcs.response import Responder
      Begin Experiment:
        resp = Responder(defaultKeyboard, use_box=1)
Flow
  Routine setup
  Routine welcome_screen
  Routine artifact_instruction
  LoopInitiator loop_artifact_recording loopType="TrialHandler"
    conditionsFile = instructions\artifact_instruction.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('slide', 0), ('text', 'Im Folgenden würden wir Sie bitten sobald Sie auf dem Bildschirm aufgefordert werden \n\n <c=#000000>mit den Augen zu rollen</c> \n\n Fahren Sie damit fort bis Sie eine neue Anweisungen erhalten. \n\n'), ('short', 'Augen rollen')]),
      OrderedDict([('slide', 1), ('text', 'Im Folgenden würden wir Sie bitten sobald Sie auf dem Bildschirm aufgefordert werden \n\n <c=#000000>mit den Augen zu blinzeln</c> \n\n Fahren Sie damit fort bis Sie eine neue Anweisungen erhalten. \n\n'), ('short', 'Blinzeln')]),
      OrderedDict([('slide', 2), ('text', 'Im Folgenden würden wir Sie bitten sobald Sie auf dem Bildschirm aufgefordert werden \n\n <c=#000000>die Augen von Links nach Rechts hin und her zu bewegen</c> \n\n Fahren Sie damit fort bis Sie eine neue Anweisungen erhalten. \n\n'), ('short', 'Augen hin und her bewegen')]),
      OrderedDict([('slide', 3), ('text', 'Im Folgenden würden wir Sie bitten sobald Sie auf dem Bildschirm aufgefordert werden \n\n <c=#000000>den Kiefer anzuspannend und mit den Zähnen zu knirschen</c> \n\n Fahren Sie damit fort bis Sie eine neue Anweisungen erhalten. \n\n'), ('short', 'Kiefer anspannen und knirschen')]),
      OrderedDict([('slide', 4), ('text', 'Im Folgenden würden wir Sie bitten sobald Sie auf dem Bildschirm aufgefordert werden \n\n <c=#000000>mehrfach hintereinander zu schlucken</c> \n\n Fahren Sie damit fort bis Sie eine neue Anweisungen erhalten. \n\n'), ('short', 'Schlucken')])]
    Routine artifact_explainer
    Routine countdown
    Routine artifact_recording
    Routine short_blank
  LoopTerminator loop_artifact_recording
  LoopInitiator loop_eyesopen_instruction loopType="TrialHandler"
    conditionsFile = instructions\eyesopen_instruction.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('slide', 0), ('text', 'Vielen Dank, für Ihre Teilnahme! \n\nDamit die Messung ein Erfolg wird, benötigen wir Ihre Mithilfe:\n\nBitte sitzen Sie ruhig und entspannt und <c=#000000>vermeiden Sie unnötige Bewegungen </c>sowie häufiges <c=#000000>Blinzeln</c>. Lassen Sie automatisches Blinzeln jedoch zu.\n\n Wenn es unbequem wird, richten Sie sich kurz neu aus, um wieder eine ruhige Position zu finden. \n\nFalls Sie fragen haben, wenden Sie sich bitte an die Studienleitung.\n\nSonst können Sie mit der blauen Taste fortfahren.')]),
      OrderedDict([('slide', 1), ('text', 'Im folgenden nehmen wir eine 5-minütige Ruhemessung vor.\n\nSchauen Sie bitte dabei auf das Kreuz in der Mitte des Bildschirms. \nLassen Sie dabei Ihre Gedanken ziehen und denken Sie an nichts Bestimmtes.\n\nFalls Sie fragen haben, wenden Sie sich bitte an die Studienleitung.\n\nSonst können Sie mit der blauen Taste fortfahren.')])]
    Routine eyesopen_instruction
  LoopTerminator loop_eyesopen_instruction
  Routine countdown
  Routine eyesopen_recording
  Routine short_blank
  LoopInitiator loop_eyesclosed_instruction loopType="TrialHandler"
    conditionsFile = instructions\eyesclosed_instruction.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('slide', 0), ('text', 'Vielen Dank, für Ihre Teilnahme! \n\nDamit die Messung ein Erfolg wird, benötigen wir Ihre Mithilfe:\n\nBitte sitzen Sie ruhig und entspannt und <c=#000000>vermeiden Sie unnötige Bewegungen </c>sowie häufiges <c=#000000>Blinzeln</c>. Lassen Sie automatisches Blinzeln jedoch zu.\n\n Wenn es unbequem wird, richten Sie sich kurz neu aus, um wieder eine ruhige Position zu finden. \n\nFalls Sie fragen haben, wenden Sie sich bitte an die Studienleitung.\n\nSonst können Sie mit der blauen Taste fortfahren.')]),
      OrderedDict([('slide', 1), ('text', 'Im folgenden nehmen wir eine 5-minütige Ruhemessung vor.\n\nSchauen Sie bitte dabei auf das Kreuz in der Mitte des Bildschirms. \nLassen Sie dabei Ihre Gedanken ziehen und denken Sie an nichts Bestimmtes.\n\nFalls Sie fragen haben, wenden Sie sich bitte an die Studienleitung.\n\nSonst können Sie mit der blauen Taste fortfahren.')])]
    Routine eyesclosed_instruction
  LoopTerminator loop_eyesclosed_instruction
  Routine countdown
  Routine eyesclosed_recording
  Routine short_blank
  Routine goodbye_screen
